global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

    extensions:
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH IF NECESSARY
        - ''

hardware:
    
    spm:
        module.Class: 'spm.spm_asc500.SPM_ASC500'
        sync_in_timeout:  0 # in ms

    aps_magnet:
        module.Class: 'magnet.APS_magnet.APSMagnet'
        magnet_address_zx: 'COM8'
        magnet_address_y: 'COM9'

        magnet_x_constr: 0.2 # in Tesla
        magnet_y_constr: 0.2 # in Tesla
        magnet_z_constr: 0.2 # in Tesla
        magnet_rho_constr: 0.3  # in Tesla 

    mw_source_smb100B:
        module.Class: 'microwave.mw_source_smb100B.MicrowaveSMB100B'
        tcpip_address: 'TCPIP0::132.239.27.238::inst0::INSTR'
        tcpip_timeout: 20

    mw_source_srssg:
        module.Class: 'microwave.mw_source_srssg.MicrowaveSRSSG'
        gpib_address: 'GPIB0::27::INSTR'
        gpib_timeout: 10

    time_tagger:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 1

        pixelclock_begin_chn: 2
        pixelclock_click_chn: 1
        pixelclock_end_chn: 3
    
    fastcounter_time_tagger:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        timetagger_channel_apd_0: 1
        timetagger_channel_detect: 2
        timetagger_channel_next: 3
        timetagger_channel_sequence: 7
        timetagger_sum_channels: False

    timetagger_slowcounter:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 1

    timetagger_testODMR:
        module.Class: 'timetagger_counter_V1_Hanyi.TimeTaggerCounter'
        timetagger_channel_apd_0: 1

    # smiq:
    #     module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
    #     gpib_address: 'GPIB0::25::INSTR'
    #     gpib_timeout: 20 # in seconds
    #     frequency_min: 300e3  # optional, in Hz
    #     frequency_max: 3.3e9  # optional, in Hz
    #     power_min: -100  # optional, in dBm
    #     power_max: 0  # optional, in dBm

    pulsestreamer:
        module.Class: 'swabian_instruments.pulse_streamer.PulseStreamer'
        pulsestreamer_ip: '169.254.8.2'
        laser_channel: 0
        uw_x_channel: 1
        mw_switch: 2
        mw_trig: 3
        pixel_start: 5
        pixel_stop: 6
        sync_in: 7
        use_external_clock: False
        external_clock_option: 0

    pulser_awg5014c:
        module.Class: 'awg.tektronix_awg5014c.AWG5014C'
        awg_ip_address: '172.16.27.118'
        awg_port: 3000 # the port number as integer
        timeout: 20
        # tmp_work_dir: 'C:\\Software\\qudi_pulsed_files' # optional
        # ftp_root_dir: 'C:\\inetpub\\ftproot' # optional, root directory on AWG device
        # ftp_login: 'anonymous' # optional, the username for ftp login
        # ftp_passwd: 'anonymous@' # optional, the password for ftp login
        # default_sample_rate: 600.0e6 # optional, the default sampling rate

    cameraBasler:
        module.Class: 'camera.basler.Basler_camera.CameraBasler'
        camera_ID : 'acA1920-155um'
        camera_index: '0'
        pixel_format: 'Mono12'
        input_line: 'Line4'
        output_line: 'Line3'
        
    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20

    mydummyspm:
        module.Class: 'spm.spm_dummy.SPMDummy'
        libpath: 'C:\\Data\\AttoDRY_Data'

    fastcounter_dummy:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        gated: False
        #load_trace: None # path to the saved dummy trace


logic:

    afm_scanner_logic:
        module.Class: 'afm_confocal_logic.AFMConfocalLogic'
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH
        meas_path: 'C:\\Data\\AttoDRY_Data'
        connect:
            spm_device: 'spm'
            savelogic: 'savelogic'
            counter_device: 'time_tagger'
            counter_logic: 'counterlogic'
            fitlogic: 'fitlogic'
            pulser: 'pulsestreamer'
            microwave: 'mw_source_smb100B'
            # microwave: 'mw_source_srssg'
            pulsed_master: 'pulsedmasterlogic'

    odmr_slowcounter_microwave_interfuse:
        module.Class: 'interfuse.odmr_slowcounter_microwave_interfuse.ODMRSlowCounterMicrowaveInterfuse'
        connect:          
            slowcounter: 'time_tagger'
            # microwave: 'mw_source_smb100B'
            microwave: 'mw_source_srssg'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'time_tagger'
            #counter1: 'mq'
            savelogic: 'savelogic'

    odmr_counter_pulser_interfuse:
        module.Class: 'interfuse.odmr_counter_pulser_interfuse.ODMRCounterInterfuse'
        connect:
            slowcounter: 'time_tagger'
            pulser: 'pulsestreamer'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            # odmrcounter: 'odmr_counter_pulser_interfuse'
            # fitlogic: 'fitlogic'
            # microwave1: 'mw_source_smb100B'
            # savelogic: 'savelogic'
            # taskrunner: 'tasklogic'

            # WF ODMR
            odmrcounter: 'odmr_counter_microwave_interfuse_Basler'
            fitlogic: 'fitlogic'
            microwave1: 'odmr_counter_microwave_interfuse_Basler'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

        scanmode: 'LIST'
        clock_frequency: 100

    # Interfuse for WF ODMR with Basler Cam
    odmr_counter_microwave_interfuse_Basler:
        module.Class: 'interfuse.odmr_counter_microwave_interfuse_Basler.ODMRCounterMicrowaveInterfuse_Basler'
        connect:          
            slowcounter: 'cameraBasler'
            microwave: 'mw_source_smb100B'
            # microwave: 'mw_source_srssg'
        savepath: 'C:/Users/cduPC/Documents/Measurement Data/QUDI/Widefield_data' #the data is saved in .mat format

    
    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH
        win_data_directory: 'C:\\Data\\Qudi_Data'
        log_into_daily_directory: True

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            fitlogic: 'fitlogic'


    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            # pulsegenerator: 'mydummypulser'
            pulsegenerator: 'pulser_awg5014c'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            # fastcounter: 'fastcounter_time_tagger'
            fastcounter: 'fastcounter_dummy'
            # pulsegenerator: 'mydummypulser'
            pulsegenerator: 'pulser_awg5014c'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'microwave_dummy'
    
    magnetlogic:
        module.Class: 'magnet_vector_logic.MagnetLogic'
        connect:
            magnetstage: 'aps_magnet'
            counterlogic: 'counterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'
            qafmlogic: 'afm_scanner_logic'

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        connect:
            laser: 'laserdummy'

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            hardware: 'cameraBasler'
            savelogic: 'savelogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    qafm_gui:
        module.Class: 'qafm.qafm_gui.ProteusQGUI'
        connect:
            qafmlogic: 'afm_scanner_logic'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'
    
    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'
    
    magnet:
        module.Class: 'magnet.magnet_vector_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnetlogic'
            savelogic: 'savelogic'

    laser:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'

    camera_gui:
        module.Class: 'camera.cameragui.CameraGUI'
        connect:
            camera_logic: 'camera_logic'
            savelogic: 'savelogic'
