#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    simpledatadummy:
        module.Class: 'simple_data_dummy.SimpleDummy'

    pulseblaster:
        module.Class: 'spincore.pulse_blaster_esrpro_NoSwitch.PulseBlasterESRPRO'
        clock_frequency: 500e6 # in Hz
        min_instr_len: 5    # number of clock cycles for minimal instruction
        debug_mode: False   # optional, to set the debug mode on or off.
        use_smart_pulse_creation: False # optinal, default is false, try to
                                        # optimize the memory used on the device.
        library_file: 'spinapi64.dll'  # optional, name of the library file
                                            # or  whole path to the file

    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20

    mw_source_smb100b:
        module.Class: 'microwave.mw_source_smb100b.MicrowaveSMB100B'
        tcpip_address: 'TCPIP0::169.254.2.20::inst0::INSTR'
        tcpip_timeout: 20

    mw_source_sgs100A:
        module.Class: 'microwave.mw_source_sgs100A.MicrowaveSGS100A'
        tcpip_address: 'TCPIP0::169.254.2.20::inst0::INSTR'
        tcpip_timeout: 10

    mw_source_agilent:
        module.Class: 'microwave.mw_source_agilent.MicrowaveAgilent'
        usb_address: 'USB0::0x0957::0x2018::0115001314::0::INSTR'
        usb_timeout: 20 # in seconds

    nicard_6343:
        module.Class: 'national_instruments_x_series.NationalInstrumentsXSeries'
        photon_sources:
            - '/Dev1/PFI8'
        clock_channel: '/Dev1/Ctr1'
        default_clock_frequency: 100 # optional, in Hz
        counter_channels:
            - '/Dev1/Ctr0'
        counter_ai_channels:
            - '/Dev1/AI0'
        counter_voltage_range: [-10, 10]
        default_scanner_clock_frequency: 100 # optional, in Hz
        scanner_clock_channel: '/Dev1/Ctr2'
        pixel_clock_channel: '/Dev1/PFI6'
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
            #- '/Dev1/AO3'
        scanner_ai_channels:
            - '/Dev1/AI1'
        scanner_counter_channels:
            - '/Dev1/Ctr3'
        scanner_voltage_ranges:
            - [-5, 5]
            - [-5, 5]
            - [0, 5]
            #- [-2, 2]
        scanner_position_ranges:
            - [0e-6, 200e-6]
            - [0e-6, 200e-6]
            - [-100e-6, 100e-6]
            #- [-10, 10]

        odmr_trigger_channel: '/Dev1/PFI7'

        gate_in_channel: '/Dev1/PFI9'
        default_samples_number: 50
        max_counts: 3e7
        read_write_timeout: 10
        counting_edge_rising: True

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummyinstreamer:
        module.Class: 'data_instream_dummy.InStreamDummy'
        digital_channels:  # optional, must provide at least one digital or analog channel
            - 'digital 1'
            - 'digital 2'
            - 'digital 3'
        analog_channels:  # optional, must provide at least one digital or analog channel
            - 'analog 1'
            - 'analog 2'
        digital_event_rates:  # optional, must have as many entries as digital_channels or just one
            - 10
            - 1000
            - 10000
        analog_amplitudes:  # optional, must have as many entries as analog_channels or just one
            - 5
            - 10

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        source_channels: 4
        clock_frequency: 100
        count_distribution: 'dark_bright_poisson'
        remoteaccess: True

    mydummyodmrcounter:
        module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
        clock_frequency: 100
        number_of_channels: 3
        connect:
            fitlogic: 'fitlogic'

    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        #choose_trace: True
        #gated: False

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    mydummywavemeter:
        module.Class: 'wavemeter_dummy.WavemeterDummy'
        measurement_timing: 10

    mydummyswitch1:
        module.Class: 'switches.switch_dummy.SwitchDummy'
        name: 'First'  # optional
        remember_states: True  # optional
        switches:
            one: ['down', 'up']
            two: ['down', 'up']
            three: ['low', 'middle', 'high']

    mydummyswitch2:
        module.Class: 'switches.switch_dummy.SwitchDummy'
        name: 'Second'  # optional
        remember_states: True  # optional
        switches:
            'An even longer name of the switch itself':
                - 'Very long name of a random state'
                - 'Another very long name of a random state'

    myspectrometer:
        module.Class: 'spectrometer.spectrometer_dummy.SpectrometerInterfaceDummy'
        connect:
            fitlogic: 'fitlogic'

    motordummy:
        module.Class: 'motor.motor_dummy.MotorDummy'

    magnetdummy:
        module.Class: 'magnet.magnet_dummy.MagnetDummy'

    processdummy:
        module.Class: 'process_dummy.ProcessDummy'

    laserdummy:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'

    cameradummy:
        module.Class: 'camera.camera_dummy.CameraDummy'
logic:
    timeserieslogic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        max_frame_rate: 20
        connect:
            _streamer_con: 'mydummyinstreamer'
            _savelogic_con: 'savelogic'

    simpledatalogic:
        module.Class: 'simple_data_logic.SimpleDataLogic'
        connect:
            simpledata: 'simpledatadummy'

    softpid:
        module.Class: 'software_pid_controller.SoftPIDController'
        connect:
            process: 'processdummy'
            control: 'processdummy'

    pidlogic:
        module.Class: 'pid_logic.PIDLogic'
        timestep: 0.1
        connect:
            controller: 'softpid'
            savelogic: 'savelogic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'pulseblaster'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'mydummyfastcounter'
            pulsegenerator: 'pulseblaster'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'microwave_dummy'

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'nicard_6343'
            savelogic: 'savelogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'savelogic'

    wavemeterloggerlogic:
        module.Class: 'wavemeter_logger_logic.WavemeterLoggerLogic'
        logic_acquisition_timing: 20
        logic_update_timing: 100
        connect:
            wavemeter1: 'mydummywavemeter'
            savelogic: 'savelogic'
            counterlogic: 'counterlogic'
            fitlogic: 'fitlogic'

    switchlogic:
        module.Class: 'switch_logic.SwitchLogic'
        watchdog_interval: 1
        autostart_watchdog: True
        connect:
            switch: 'switchinterfuse'

    switchinterfuse:
        module.Class: 'interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse'
        connect:
            switch1: 'mydummyswitch1'
            switch2: 'mydummyswitch2'
        extend_hardware_name: True

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'nicard_6343'
            savelogic: 'savelogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'mydummyscanner'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'nicard_6343'
            fitlogic: 'fitlogic'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimiserlogic: 'optimizerlogic'
            savelogic: 'savelogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmr_counter_microwave_interfuse_SGS100A'
            fitlogic: 'fitlogic'
            microwave1: 'odmr_counter_microwave_interfuse_SGS100A'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'
        scanmode: 'CW'

    # this interfuse enables odmr if hardware trigger is not available or if
    # the counter has only two channels:
    odmr_counter_microwave_interfuse_SGS100A:
        module.Class: 'interfuse.odmr_counter_microwave_interfuse_SGS100A.ODMRCounterMicrowaveInterfuse_SGS100A'
        connect:
            slowcounter: 'nicard_6343'
            microwave: 'mw_source_sgs100A'

    # this oder logic runs now with the interfuse
    odmrlogic2:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmr_counter_microwave_interfuse'
            fitlogic: 'fitlogic'
            microwave1: 'odmr_counter_microwave_interfuse'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'
        scanmode: 'LIST'


    laserscannerlogic:
        module.Class: 'laser_scanner_logic.LaserScannerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            savelogic: 'savelogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'
        #additional_fit_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]

    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True

    spectrumlogic:
        module.Class: 'spectrum.SpectrumLogic'
        connect:
            spectrometer: 'myspectrometer'
            savelogic: 'savelogic'
            odmrlogic: 'odmrlogic' # optional
            fitlogic: 'fitlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnetdummy'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'
            traceanalysis: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        connect:
            motorstage: 'motordummy'

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    qdplotlogic:
        module.Class: 'qdplot_logic.QDPlotLogic'
        default_plot_number: 3
        connect:
            save_logic: 'savelogic'
            fit_logic: 'fitlogic'

    nuopslogic:
        module.Class: 'nuclear_operations_logic.NuclearOperationsLogic'
        connect:
            sequencegenerationlogic: 'sequencegeneratorlogic'
            traceanalysislogic: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            odmrlogic: 'odmrlogic'
            optimizerlogic: 'optimizerlogic'
            scannerlogic: 'scannerlogic'
            savelogic: 'savelogic'

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        connect:
            laser: 'laserdummy'

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            hardware: 'cameradummy'
            savelogic: 'savelogic'

    nv_calculator_logic:
        module.Class: 'nv_calculator_logic.NVCalculatorLogic'
        connect:
            odmr: 'odmrlogic'
            pulsed: 'pulsedmeasurementlogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    timeseries:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        connect:
            _time_series_logic_con: 'timeserieslogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic: 'poimanagerlogic'
            scannerlogic: 'scannerlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'

    wavemeterlogger:
        module.Class: 'wavemeterlogger.wavemeterloggui.WavemeterLogGui'
        connect:
            wavemeterloggerlogic1: 'wavemeterloggerlogic'
            savelogic: 'savelogic'

    switches:
        module.Class: 'switch.switch_gui.SwitchGui'
        connect:
            switchlogic: 'switchlogic'

    taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic'

    automation:
        module.Class: 'automation.automationgui.AutomationGui'
        connect:
            automationlogic: 'automationlogic'

    spectrometer:
        module.Class: 'spectrometer.spectrometergui.SpectrometerGui'
        connect:
            spectrumlogic: 'spectrumlogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'

    simpledata:
        module.Class: 'simpledatagui.simpledatagui.SimpleDataGui'
        connect:
            simplelogic: 'simpledatalogic'

    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'

    gatedcounter:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounterlogic'
            traceanalysislogic1: 'trace_analysis_logic'

    pidcontrol:
        module.Class: 'pidgui.pidgui.PIDGui'
        connect:
            pidlogic: 'pidlogic'

    errortest:
        module.Class: 'testgui.TestGui'
        text: 'Random text from config'
        error: 'This config is required!'

    qdplotter:
        module.Class: 'qdplotter.qdplotter_gui.QDPlotterGui'
        pen_color_list: ['b', 'y', 'm', 'g']
        connect:
            qdplot_logic: 'qdplotlogic'


    nuclearops:
        module.Class: 'nuclear_operations.nuclear_operations.NuclearOperationsGui'
        connect:
            nuclearoperationslogic: 'nuopslogic'
            savelogic: 'savelogic'

    laser:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'

    laserscanner:
        module.Class: 'laserscanner.laserscannergui.VoltScanGui'
        connect:
            voltagescannerlogic1: 'laserscannerlogic'
            savelogic: 'savelogic'

    # Gui to test the dummy counting
    odmrgui_program_trigger:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic2'
            savelogic: 'savelogic'

    camera_gui:
        module.Class: 'camera.cameragui.CameraGUI'
        connect:
            camera_logic: 'camera_logic'
            savelogic: 'savelogic'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    nv_calculator_gui:
        module.Class: 'nv_calculator.nv_calculatorgui.NVCalculatorGui'
        connect:
            nv_calculatorlogic: 'nv_calculator_logic'
